PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EyetrackingExample
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = This text could be a snippet
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  Routine Start_Eyetracking
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        use_eyetracker = False
        logger = None

        if use_eyetracker==True:
            from base_functionalities.logger import Logger
            # path where to save the data
            logger = Logger("C:\\Eyetracking\\EyetrackingData.csv")

            # use for gaze point in user coordinate system
            logger.add_key_to_log('left_gaze_point_in_user_coordinate_system')
            logger.add_key_to_log('right_gaze_point_in_user_coordinate_system')

            # use for recording if the eyepositiong is valid
            logger.add_key_to_log('left_gaze_point_validity')
            logger.add_key_to_log('right_gaze_point_validity')

            # use for gaze point in origin user coordinate system
            logger.add_key_to_log('left_gaze_origin_in_user_coordinate_system')
            logger.add_key_to_log('right_gaze_origin_in_user_coordinate_system')

            # use for gazepoint in display area
            logger.add_key_to_log('left_gaze_point_on_display_area')
            logger.add_key_to_log('right_gaze_point_on_display_area')

            # use for system time
            logger.add_key_to_log('system_time_stamp')

            # use for pupil diameter recording
            logger.add_key_to_log('left_pupil_diameter')
            logger.add_key_to_log('right_pupil_diameter')

        if use_eyetracker==True:
            # start the recording
            logger.start_recording()
  Routine End_Eyetracking
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        if use_eyetracker == True:
            # end the recording session
            logger.stop_recording()
Flow
  Routine Start_Eyetracking
  Routine trial
  Routine End_Eyetracking
